<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns:aeon-video="clr-namespace:Aeon.Video;assembly=Aeon.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:p2="clr-namespace:Harp.ClockSynchronizer;assembly=Harp.ClockSynchronizer"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Behavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM11</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorNotifications</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentSampleState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleOnset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SampleOnset</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SampleOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentSampleState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RewardPort0</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RewardPort1</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>SupplyPort1</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>SupplyPort2</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:RewardCommand">
              <rx:Name>RewardCommand</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>RewardLocation1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardPosition</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>SupplyPort1</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.01S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RewardTime</Selector>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PulseSupplyPort1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseSupplyPort1Payload">
                      <beh:PulseSupplyPort1>100</beh:PulseSupplyPort1>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort1</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>RewardLocation2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardPosition</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>SupplyPort2</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.01S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Command</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RewardTime</Selector>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PulseSupplyPort2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseSupplyPort2Payload">
                      <beh:PulseSupplyPort2>100</beh:PulseSupplyPort2>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort2</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="29" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="25" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.LoggingRootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>D:\temp</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>SessionSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>Behavior</LogName>
              <Heartbeats>BehaviorEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>BehaviorEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
              <LogName>BehaviorCommands</LogName>
              <Selector xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraProperties.FrameRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Video:LogVideo.bonsai">
              <Heartbeats>BehaviorEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
              <LogName>VideoData</LogName>
              <FrameRate>15</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorNotifications</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>BehaviorEvents</Heartbeats>
              <ClosingDuration xsi:nil="true" />
              <LogName>BehaviorNotifications</LogName>
              <Selector xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="CameraSeriaNumber" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraProperties.Exposure</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraProperties.Gain</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon-video:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>24284790</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <aeon-video:ExposureTime>50000</aeon-video:ExposureTime>
                <aeon-video:Gain>0</aeon-video:Gain>
                <aeon-video:Binning>1</aeon-video:Binning>
                <aeon-video:TriggerSource>Line3</aeon-video:TriggerSource>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraStream</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="9" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM12</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="SessionSettingsPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:LoadSessionSettings">
          <p3:Path>odor-discrimination_with-odours_rig1.yml</p3:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartCameraKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraProperties.FrameRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Camera0Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
          <beh:Camera0Frequency>15</beh:Camera0Frequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
          <beh:StartCameras>CameraOutput0</beh:StartCameras>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:SelectMany">
        <Name>PreparePort1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DOPort1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>WaitForResponse1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardPort0</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RewardTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RewardTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RewardCommand">
                <p1:RewardTime>0.1</p1:RewardTime>
                <p1:RewardPosition>0</p1:RewardPosition>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>RewardCommand</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort1</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>PreparePort2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DOPort2</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>WaitForResponse2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardPort1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.RewardTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RewardTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RewardCommand">
                <p1:RewardTime>0.1</p1:RewardTime>
                <p1:RewardPosition>1</p1:RewardPosition>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>RewardCommand</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort2</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardCommand</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>R1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RewardPosition</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="rx:Condition">
        <Name>R2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RewardPosition</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>R1: {0}, R2: {1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraStream</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="26" To="31" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="33" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>