<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Finds the largest dark region in each camera frame and publishes it to TrackedCentroid as Timestamped&lt;ConnectedComponent&gt;, stamped with the frame's own Harp time (the same Seconds as VideoData). Coordinates are full-frame video pixels. Needs a CameraStream and a SessionSettings subject; reads CameraProperties.BinaryThreshold and TrackingProperties (CropSourcePoints, MinArea). Does not log: add a LogData inside the workflow's LogController scope, subscribed to TrackedCentroid.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CameraStream" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraStream</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="SessionSettings" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraProperties.BinaryThreshold</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ThresholdValue" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>110</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrackingProperties.CropSourcePoints.Points</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertPoints" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Regions" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MaskPolygon">
          <cv:Regions />
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>5</cv:Width>
            <cv:Height>5</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Ellipse</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Open</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrackingProperties.MinArea</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="MinArea" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>900</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TrackedCentroid" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TrackedCentroid</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="19" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
