<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:p2="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>CommandsO0</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RateLimiter">
          <p1:MessageDelay>PT0.005S</p1:MessageDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PortO0" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM10</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsO0" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>CommandsO1</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RateLimiter">
          <p1:MessageDelay>PT0.005S</p1:MessageDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PortO1" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM13</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsO1" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="OlfactometerEvents" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OlfactometerEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="SessionSettings" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OlfactometerCommands</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OlfactometerCommand</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ParseOlfactometerBitmask" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ValvesO0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OdorValveState" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateOdorValveStatePayload">
                <p2:OdorValveState>None</p2:OdorValveState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO0</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ValvesO1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OdorValveState" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateOdorValveStatePayload">
                <p2:OdorValveState>Valve3</p2:OdorValveState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EndValvesO0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="EndValveState" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateEndValveStatePayload">
                <p2:EndValveState>None</p2:EndValveState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO0</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EndValvesO1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="EndValveState" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateEndValveStatePayload">
                <p2:EndValveState>EndValve1</p2:EndValveState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TargetFlowO0</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
  it[0] as Channel0,
  it[1] as Channel1,
  it[2] as Channel2,
  it[3] as Channel3,
  it[4] as Channel4
)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Channel0" Selector="Channel0" />
                <Property Name="Channel1" Selector="Channel1" />
                <Property Name="Channel2" Selector="Channel2" />
                <Property Name="Channel3" Selector="Channel3" />
                <Property Name="Channel4" Selector="Channel4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateChannelsTargetFlowPayload">
                <p2:Channel0>0</p2:Channel0>
                <p2:Channel1>0</p2:Channel1>
                <p2:Channel2>0</p2:Channel2>
                <p2:Channel3>0</p2:Channel3>
                <p2:Channel4>10</p2:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO0</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TargetFlowO1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
  it[0] as Channel0,
  it[1] as Channel1,
  it[2] as Channel2,
  it[3] as Channel3,
  it[4] as Channel4
)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Channel0" Selector="Channel0" />
                <Property Name="Channel1" Selector="Channel1" />
                <Property Name="Channel2" Selector="Channel2" />
                <Property Name="Channel3" Selector="Channel3" />
                <Property Name="Channel4" Selector="Channel4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateChannelsTargetFlowPayload">
                <p2:Channel0>0</p2:Channel0>
                <p2:Channel1>0</p2:Channel1>
                <p2:Channel2>0</p2:Channel2>
                <p2:Channel3>10</p2:Channel3>
                <p2:Channel4>10</p2:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CommandsO1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="22" Label="Source1" />
            <Edge From="0" To="28" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="1" To="17" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="34" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="34" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="34" Label="Source3" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="34" Label="Source4" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="34" Label="Source6" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source7" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Name</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>CommandDictionary</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="OlfactometerCommand" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>OlfactometerCommand</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CommandDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty">
          <Value>Default</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableFlowPayload">
          <p2:EnableFlow>Enabled</p2:EnableFlow>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CommandsO0</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableFlowPayload">
          <p2:EnableFlow>Enabled</p2:EnableFlow>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CommandsO1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel0ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel1ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel2ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel3ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel4ActualFlow" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Visualizer">
        <Name>Olf0Flowmeter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel0ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel1ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel2ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel3ActualFlow" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:Channel4ActualFlow" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Visualizer">
        <Name>Olf1Flowmeter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="47" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="47" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="47" Label="Source3" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="47" Label="Source4" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source5" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="59" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="59" Label="Source2" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="59" Label="Source3" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="59" Label="Source4" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source5" />
      <Edge From="59" To="60" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>