WorkflowBuilder(Version=2.9.1)
GroupWorkflow HARP
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.BehaviorBoard)
    -> PropertyMapping(PortName)
    -> GroupWorkflow Behavior
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
        -> RateLimiter(MessageDelay=PT0.005S) => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5)
        -> PublishSubject BehaviorEvents => #4
        -> WorkflowOutput
        #4 -> Last
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToString(it)
        -> PublishSubject BehaviorNotifications

        BooleanProperty(Value=false)
        -> BehaviorSubject CurrentSampleState

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.PortDIOStateEvent) => #12
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
        -> DistinctUntilChanged
        -> PublishSubject DI0
        #12 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
        -> DistinctUntilChanged
        -> PublishSubject DI1

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #20
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #22
        #20 -> MemberSelector(Selector=Seconds) => #23
        #22, #23 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> DistinctUntilChanged => #26
        -> Condition Onset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
            -> WorkflowOutput
        -> PublishSubject SampleOnset
        #26 -> Condition Offset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        -> PublishSubject SampleOffset

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject RewardPort0

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject RewardPort1

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="SupplyPort1 SupplyPort2 DO3")) => #43
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2")) => #44
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0")) => #45
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=30)) => #46
        #43, #44, #45, #46 -> Merge
        -> MulticastSubject BehaviorCommands

        BehaviorSubject<DataSchema.RewardCommand> RewardCommand
        -> SelectMany Reward
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Command

            SubscribeSubject Command
            -> Condition RewardLocation1 => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardPosition)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject Command
            -> MemberSelector(Selector=RewardTime)
            -> Multiply(Operand=DoubleProperty(Value=1000))
            -> PropertyMapping(PulseSupplyPort1) => #8
            #4, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=119))
            -> MulticastSubject BehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
            -> MulticastSubject BehaviorCommands => #12
            SubscribeSubject Command
            -> Condition RewardLocation2 => #14
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardPosition)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            SubscribeSubject Command
            -> MemberSelector(Selector=RewardTime)
            -> Multiply(Operand=DoubleProperty(Value=1000))
            -> PropertyMapping(PulseSupplyPort2) => #18
            #14, #18 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=119))
            -> MulticastSubject BehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
            -> MulticastSubject BehaviorCommands => #22
            #12, #22 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.Olfactometer0)
    -> PropertyMapping(PortO0) => #6
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.Olfactometer1)
    -> PropertyMapping(PortO1) => #9
    #6, #9 -> IncludeWorkflow
      Path=Extensions\Olfactometer.bonsai
      PortO0=COM4
      EventsO0=EventsO0
      PortO1=COM9
      EventsO1=EventsO1
      OlfactometerEvents=OlfactometerEvents
      SessionSettings=SessionSettings
      OlfactometerCommand=OlfactometerCommand

    GroupWorkflow SyncPulse
      Description: Sync pulses for lining the session up with another recording, such as Neuropixels data on an NI breakout board. Configured in the syncPulse section of the session settings (no section = disabled). Behavior board output DO3 is pulsed high for pulseWidth ms at random intervals between minInterval and maxInterval s; the board times the pulse width itself (pulse mode on DO3 is enabled at startup in HARP/Behavior). Settings that would make pulses run together or come faster than every 0.1 s (minInterval below 0.1, maxInterval below minInterval, pulseWidth not shorter than minInterval) send no pulses and log SyncPulseInvalidSettings to ExperimentEvents. Each pulse's time is the Harp timestamp on the board's reply to the OutputSet DO3 command, i.e. when the line actually went high, not when Bonsai sent the command. These are published as TimestampedSyncPulse and logged to SyncPulse.
      Workflow
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=SyncPulse)
        -> Bonsai.Scripting.Expressions.ExpressionCondition HasSyncPulse => #2
          Expression: it != null
        SubscribeSubject BehaviorEvents => #3
        #2, #3 -> SubscribeWhen
        -> Take(Count=1) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition ValidSettings => #6
          Expression: MinInterval >= 0.1 && MaxInterval >= MinInterval && PulseWidth >= 1 && PulseWidth < MinInterval * 1000
        -> Bonsai.Scripting.Expressions.ExpressionTransform PulseWidthMs
          Expression: Convert.ToUInt16(PulseWidth)
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO3)
        -> MulticastSubject BehaviorCommands
        #6 -> SelectMany RandomIntervalTimer
          Description: Endless train of ticks: each round draws a gap uniformly between MinInterval and MaxInterval, waits that long, ticks once, then Repeat starts the next round.
          Workflow
            WorkflowInput Source1
            -> PropertyMapping(Lower(Selector=MinInterval), Upper(Selector=MaxInterval))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.5, Upper=1.5)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform GapSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> SelectMany Wait
                WorkflowInput Source1
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT1S)
                -> WorkflowOutput
            -> Repeat
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
        -> MulticastSubject BehaviorCommands
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition InvalidSettings
          Expression: !(MinInterval >= 0.1 && MaxInterval >= MinInterval && PulseWidth >= 1 && PulseWidth < MinInterval * 1000)
        -> StringProperty(Value=SyncPulseInvalidSettings)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject BehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputSet)
        -> Condition DO3Set(Description="Keeps only the board's replies to writes that set DO3, i.e. the sync pulse onsets.")
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
            -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
            -> WorkflowOutput
        -> PublishSubject TimestampedSyncPulse

    GroupWorkflow PulseSupplyControl
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=ShortcutKeys.Pulse1Key)
        -> PropertyMapping(Value)
        -> StringProperty(Value=Ctrl+5)
        -> StringToKey
        -> PropertyMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown
          Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 Control"
          SuppressRepetitions=false
        -> Condition => #7
            WorkflowInput Source1 => #0
            SubscribeSubject StartDelay
            -> PropertyMapping(Value) => #2
            #0, #2 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        Bonsai.Windows.Input.KeyDown
          Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 Control"
          SuppressRepetitions=false
        -> IntProperty(Value=5000) => #9
        Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock Space Next PageDown Home Up D0 D2 D4 D6 Control", SuppressRepetitions=false)
        -> IntProperty(Value=1000) => #11
        #9, #11 -> Merge
        -> PropertyMapping(PulseSupplyPort1) => #13
        #7, #13 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=1000))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=ShortcutKeys.Pulse2Key)
        -> PropertyMapping(Value)
        -> StringProperty(Value=Ctrl+6)
        -> StringToKey
        -> PropertyMapping(Filter)
        -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock Space Next PageDown Home Up D0 D2 D4 D6 Control", SuppressRepetitions=false)
        -> Condition => #25
            WorkflowInput Source1 => #0
            SubscribeSubject StartDelay
            -> PropertyMapping(Value) => #2
            #0, #2 -> BooleanProperty(Value=true)
            -> WorkflowOutput
        Bonsai.Windows.Input.KeyDown
          Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 Control"
          SuppressRepetitions=false
        -> IntProperty(Value=5000) => #27
        Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock Space Next PageDown Home Up D0 D2 D4 D6 Control", SuppressRepetitions=false)
        -> IntProperty(Value=1000) => #29
        #27, #29 -> Merge
        -> PropertyMapping(PulseSupplyPort2) => #31
        #25, #31 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=1000))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow LightCycle
      Description: Daily dawn/dusk light schedule on behavior board output DO2, configured in the lightCycle section of the session settings (no section = disabled). Brightness is recomputed from the clock every second; fades use PWM on DO2.
      Workflow
        Timer(DueTime=PT0S, Period=PT1S) => #0
        SubscribeSubject BehaviorEvents => #1
        #0, #1 -> SubscribeWhen => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=LightCycle)
        -> Bonsai.Scripting.Expressions.ExpressionCondition HasLightCycle => #5
          Expression: it != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform TimesInSeconds => #6
          Expression: new(TimeSpan.Parse(DawnStart).TotalSeconds as DawnStart, TimeSpan.Parse(DawnDuration).TotalSeconds as DawnDuration, TimeSpan.Parse(DuskStart).TotalSeconds as DuskStart, TimeSpan.Parse(DuskDuration).TotalSeconds as DuskDuration)
        #2, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform SchedulePosition
          Expression: new((DateTime.Now.TimeOfDay.TotalSeconds - Item2.DawnStart + 86400) % 86400 as SinceDawnStart, (Item2.DuskStart - Item2.DawnStart + 86400) % 86400 as DawnToDusk, Item2.DawnDuration as DawnDuration, Item2.DuskDuration as DuskDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Brightness
          Expression: SinceDawnStart < DawnDuration ? SinceDawnStart / DawnDuration : (SinceDawnStart < DawnToDusk ? 1.0 : (SinceDawnStart - DawnToDusk < DuskDuration ? 1.0 - (SinceDawnStart - DawnToDusk) / DuskDuration : 0.0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform Percent
          Expression: Convert.ToByte(Math.Round(it * 100))
        -> DistinctUntilChanged => #11
        -> Condition Off
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO2))
        -> MulticastSubject BehaviorCommands
        #11 -> Condition FullyOn
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=100))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject BehaviorCommands
        #11 -> Bonsai.Scripting.Expressions.ExpressionCondition Fading
          Expression: it > 0 && it < 100
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmDutyCycleDO2)
        -> MulticastSubject BehaviorCommands => #24
        #5 -> MemberSelector(Selector=PwmFrequency)
        -> PropertyMapping(PwmFrequencyDO2) => #26
        #24, #26 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO2Payload(PwmFrequencyDO2=1000))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject BehaviorCommands

GroupWorkflow Logging
    SubscribeSubject CurrentSequences
    -> CreateObservable SequenceLogging
      Description: Restarts all data logging each time a new sequence is loaded (CurrentSequences). Each restart runs a new LogController, so each sequence is logged to its own timestamped folder inside Metadata.LoggingRootPath. Switch closes the previous sequence's files when the next one starts. Once the new folder is open, a SequenceStart:<sequence file name> event is sent to ExperimentEvents.
      Workflow
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.LoggingRootPath)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\temp, ChunkSize=1)

        SubscribeSubject SessionSettings => #4
        SubscribeSubject BehaviorEvents => #5
        #4, #5 -> SubscribeWhen
        -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
        -> Take(Count=1)

        SubscribeSubject CurrentSequences => #10
        SubscribeSubject BehaviorEvents => #11
        #10, #11 -> SubscribeWhen
        -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Schema)
        -> Take(Count=1)

        SubscribeSubject TimestampedEegStream
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=EegStreamEvents, Selector=nil)

        SubscribeSubject EventsO0
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

        SubscribeSubject EventsO1
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

        SubscribeSubject BehaviorEvents
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

        SubscribeSubject TimestampedExperimentEvents
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

        SubscribeSubject TimestampedBehaviorCommands
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

        SubscribeSubject CameraStream => #28
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.FrameRate)
        -> PropertyMapping(FrameRate) => #31
        #28, #31 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=60)

        SubscribeSubject TimestampedBehaviorNotifications
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

        SubscribeSubject TimestampedDetectedObject
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=DetectedObject, Selector=nil)

        SubscribeSubject CurrentSequencePath => #37
        SubscribeSubject BehaviorEvents => #38
        #37, #38 -> SubscribeWhen
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform SequenceStartEvent
          Expression: "SequenceStart:" + it.Substring(Math.Max(it.LastIndexOf(Convert.ToChar(47)), it.LastIndexOf(Convert.ToChar(92))) + 1).Replace(".yml", "")
        -> MulticastSubject ExperimentEvents

        SubscribeSubject TrackedCentroid
        -> IncludeWorkflow
          Path=Aeon.Acquisition:LogData.bonsai
          Heartbeats=BehaviorEvents
          ClosingDuration=nil
          LogName=Centroid
          Selector="Seconds,Value.Centroid.X,Value.Centroid.Y,Value.Area"

        SubscribeSubject TimestampedSyncPulse
        -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=SyncPulse, Selector=Seconds)
    -> Switch

    SubscribeSubject EegStream
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject TimestampedEegStream

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject TimestampedExperimentEvents

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject TimestampedBehaviorCommands

    SubscribeSubject BehaviorNotifications
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject TimestampedBehaviorNotifications

    SubscribeSubject DetectedObject
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject TimestampedDetectedObject

GroupWorkflow Camera
    GroupWorkflow ImmobilityTracking
        SubscribeSubject TrackedCentroid
        -> MemberSelector(Selector=Value.Centroid) => #1
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=TrackingProperties.ImmobilityAlert)
        -> PropertyMapping => #4
          Radius(Selector=Radius)
          AlertAfterMinutes(Selector=AlertAfterMinutes)
          SendTestOnStart(Selector=SendTestOnStart)
          NotifyWhenMovingAgain(Selector=NotifyWhenMovingAgain)
          RigName(Selector=RigName)
          WebhookUrlFile(Selector=WebhookUrlFile)
        #1, #4 -> ImmobilityAlert
          Radius=20
          AlertAfterMinutes=1
          Service=Slack
          WebhookUrlFile=slack_webhook.txt
          RigName="Hypnose NP Rig"
          NotifyWhenMovingAgain=true
          SendTestOnStart=true

    GroupWorkflow Tracking
        SubscribeSubject CameraStream
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Grayscale => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.BinaryThreshold)
        -> PropertyMapping(ThresholdValue) => #5
        #2, #5 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=BinaryInv) => #6
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties)
        -> MemberSelector(Selector=RoiSourcePoints)
        -> MemberSelector(Selector=Points)
        -> ConvertPoints
        -> PropertyMapping(Regions) => #12
        #6, #12 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=180, Y=650), Point(X=180, Y=750), Point(X=1050, Y=750), Point(X=1050, Y=650))), Operation=Sum)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Activity.Val0) => #15
        -> Take(Count=15)
        -> Average
        -> Repeat
        -> BehaviorSubject RoiMovingAverage
        #15 -> BehaviorSubject RoiIntensity

        SubscribeSubject RoiIntensity => #21
        SubscribeSubject RoiMovingAverage => #22
        #21, #22 -> WithLatestFrom
        -> Divide => #24
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties)
        -> MemberSelector(Selector=Threshold)
        -> PropertyMapping(Value) => #28
        #24, #28 -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> PublishSubject DetectedObject

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.CameraId)
    -> PropertyMapping(CameraSerialNumber)
    -> GroupWorkflow CameraSettings
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> Condition FrameEvent => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        SubscribeSubject StartDelay => #3
        #2, #3 -> SubscribeWhen => #4
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.Exposure)
        -> PropertyMapping(ExposureTime) => #7
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.Gain)
        -> PropertyMapping(Gain) => #10
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.Binning)
        -> PropertyMapping(Binning) => #13
        ExternalizedMapping(SerialNumber(DisplayName=CameraSerialNumber)) => #14
        #4, #7, #10, #13, #14 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24284790, ColorProcessing=Default, ExposureTime=12000, Gain=10, Binning=1, TriggerSource=Line3)
        -> PublishSubject CameraStream
        -> WorkflowOutput

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.StartCamera)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Alt+4)
    -> StringToKey
    -> PropertyMapping(StartCameraKey)
    -> GroupWorkflow CameraStart
        ExternalizedMapping(Filter(DisplayName=StartCameraKey))
        -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Alt", SuppressRepetitions=false) => #1
        SubscribeSubject StartDelay => #2
        #1, #2 -> SubscribeWhen => #3
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.FrameRate)
        -> PropertyMapping(Camera0Frequency) => #6
        #3, #6 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=60))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject BehaviorCommands

    IncludeWorkflow(Path=Extensions\CentroidTracking.bonsai, CameraStream=CameraStream, SessionSettings=SessionSettings, TrackedCentroid=TrackedCentroid)

GroupWorkflow EEG
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=EegProperties.DeviceName)
    -> PropertyMapping(DeviceName)
    -> UdpSource(GroupAddress=239.255.76.67, Port=8866, DeviceName=Default)
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.EegRecordingEnabled)
        -> PropertyMapping(Value) => #3
        #0, #3 -> BooleanProperty(Value=false)
        -> WorkflowOutput
    -> PublishSubject EegStream
    -> WorkflowOutput

GroupWorkflow OlfactometerPurge
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.StartOlfactometerPurgeKey)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Shift+4)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Shift", SuppressRepetitions=false)
    -> Take(Count=1)
    -> SelectMany OlfactometerValvePurge
        WorkflowInput Source1
        -> StringProperty(Value=OdorA)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorB)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorC)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorD)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT15S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorE)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorF)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorG)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> StringProperty(Value=OlfactometerPurged)
        -> WorkflowOutput
    -> MulticastSubject ExperimentEvents

GroupWorkflow ExperimentProgression
    SubscribeSubject CurrentSequences
    -> Take(Count=1)
    -> MemberSelector(Selector=Sequences)
    -> Merge
    -> CreateObservable SequenceProgression
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceSelections

        SubscribeSubject SequenceSelections
        -> Sink SetDefault
            WorkflowInput Source1
            -> StringProperty(Value=Default)
            -> MulticastSubject OlfactometerCommand
            -> WorkflowOutput
        -> SelectMany ChooseRandomSequence
            WorkflowInput Source1 => #0
            -> UniformSampleList => #1
            #0 -> StringProperty(Value=ChooseRandomSequence)
            -> MulticastSubject ExperimentEvents => #3
            #1, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany InitiationSequence => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> Sink EnableTrialStartIndicator
                WorkflowInput Source1
                -> MemberSelector(Selector=EnableTrialStartIndicator)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            -> AsyncSubject SequenceInfo
            -> StringProperty(Value=InitiationSequence)
            -> MulticastSubject ExperimentEvents

            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=RewardConditions)
            -> Merge
            -> CreateObservable PresentStimulus
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Valence

                SubscribeSubject BehaviorEvents => #3
                SubscribeSubject SustainedSampleState
                -> MemberSelector(Selector=Value) => #5
                #3, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Take(Count=1)
                -> AsyncSubject AlreadySampling

                SubscribeSubject SustainedSampleOnset => #11
                -> BooleanProperty(Value=true) => #12
                #11 -> MemberSelector(Selector=Seconds) => #13
                #12, #13 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #15
                SubscribeSubject AlreadySampling
                -> Condition AlreadySampling => #17
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #15, #17 -> Merge
                -> Take(Count=1)
                -> AsyncSubject InitiatingOnset

                SubscribeSubject SustainedSampleState
                -> Condition => #22
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #24
                SubscribeSubject InitiatingOnset
                -> MemberSelector(Selector=Seconds) => #26
                #24, #26 -> WithLatestFrom
                -> Subtract
                -> LessThan(Operand=DoubleProperty(Value=0))
                -> Condition => #30
                    WorkflowInput Source1
                    -> WorkflowOutput
                #22, #30 -> WithLatestFrom
                -> MemberSelector(Selector=Item1)
                -> Take(Count=1)
                -> AsyncSubject ReinitiatingOnset
                SubscribeSubject InitiatingOnset => #35
                SubscribeSubject Valence => #36
                #35, #36 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Command)
                -> MulticastSubject OlfactometerCommand => #39
                SubscribeSubject Valence
                -> MemberSelector(Selector=MaximumSamplingTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #43
                #39, #43 -> Delay(DueTime=PT2S) => #44
                #44, #30 -> TakeUntil => #45
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #48
                #45, #48 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand => #50
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #54
                #50, #54 -> Delay(DueTime=PT0.2S) => #55
                -> BooleanProperty(Value=false) => #56
                #55 -> BooleanProperty(Value=true) => #57
                StringProperty(Value=Case1) => #58
                #56, #57, #58 -> Zip => #59
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #61
                SubscribeSubject InitiatingOnset
                -> MemberSelector(Selector=Seconds) => #63
                #61, #63 -> WithLatestFrom
                -> Subtract => #65
                #65, #30 -> TakeUntil => #66
                -> Condition WithinSamplingPeriod => #67
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.001)) => #4
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MaximumSamplingTime) => #6
                    SubscribeSubject SequenceInfo
                    -> MemberSelector(Selector=InterCommandTime)
                    -> PropertyMapping(Value) => #9
                    #6, #9 -> Add(Operand=DoubleProperty(Value=0.2))
                    -> PropertyMapping(Value) => #11
                    #11, #0 -> LessThan(Operand=DoubleProperty(Value=2.2)) => #12
                    #4, #12 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                #59, #67 -> TakeUntil => #68
                #67 -> BooleanProperty(Value=true) => #69
                #67 -> BooleanProperty(Value=true) => #70
                StringProperty(Value=Case2) => #71
                #69, #70, #71 -> Zip => #72
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #76
                #72, #76 -> Delay(DueTime=PT0.2S) => #77
                #66 -> Condition LessThanMinimum => #78
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.001)) => #4
                    #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                    #4, #5 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #79
                #78 -> BooleanProperty(Value=false) => #80
                StringProperty(Value=Case3) => #81
                #79, #80, #81 -> Zip => #82
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #86
                #82, #86 -> Delay(DueTime=PT0.2S) => #87
                SubscribeSubject ReinitiatingOnset => #88
                SubscribeSubject Valence => #89
                #88, #89 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Command)
                -> MulticastSubject OlfactometerCommand => #92
                SubscribeSubject Valence
                -> MemberSelector(Selector=MinimumSamplingTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #96
                #92, #96 -> Delay(DueTime=PT0.001S) => #97
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #100
                #97, #100 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand => #102
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #106
                #102, #106 -> Delay(DueTime=PT0.2S) => #107
                -> BooleanProperty(Value=false) => #108
                #107 -> BooleanProperty(Value=true) => #109
                StringProperty(Value=Case4) => #110
                #108, #109, #110 -> Zip => #111
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #113
                SubscribeSubject ReinitiatingOnset
                -> MemberSelector(Selector=Seconds) => #115
                #113, #115 -> WithLatestFrom
                -> Subtract => #117
                -> Condition WithinSamplingPeriod => #118
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.001)) => #4
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MaximumSamplingTime) => #6
                    SubscribeSubject SequenceInfo
                    -> MemberSelector(Selector=InterCommandTime)
                    -> PropertyMapping(Value) => #9
                    #6, #9 -> Add(Operand=DoubleProperty(Value=0.2))
                    -> PropertyMapping(Value) => #11
                    #11, #0 -> LessThan(Operand=DoubleProperty(Value=2.2)) => #12
                    #4, #12 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                #111, #118 -> TakeUntil => #119
                #118 -> BooleanProperty(Value=true) => #120
                #118 -> BooleanProperty(Value=true) => #121
                StringProperty(Value=Case5) => #122
                #120, #121, #122 -> Zip => #123
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #127
                #123, #127 -> Delay(DueTime=PT0.2S) => #128
                #117 -> Condition LessThanMinimum => #129
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.001)) => #4
                    #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                    #4, #5 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #130
                #129 -> BooleanProperty(Value=false) => #131
                StringProperty(Value=Case6) => #132
                #130, #131, #132 -> Zip => #133
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #137
                #133, #137 -> Delay(DueTime=PT0.2S) => #138
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=MaximumInterOdourPokeTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT5S) => #143
                SubscribeSubject CommandsO1 => #144
                #143, #144 -> SubscribeWhen => #145
                SubscribeSubject SustainedSampleState => #146
                #145, #146 -> WithLatestFrom => #147
                #147, #67 -> TakeUntil => #148
                #148, #118 -> TakeUntil
                -> Condition FailedToSample => #150
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot => #3
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Index)
                    -> GreaterThan(Operand=IntProperty(Value=0)) => #6
                    #3, #6 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #151
                #150 -> BooleanProperty(Value=false) => #152
                StringProperty(Value=Case7) => #153
                #151, #152, #153 -> Zip => #154
                SubscribeSubject RewardPort1 => #155
                SubscribeSubject RewardPort0 => #156
                #155, #156 -> Merge => #157
                -> BooleanProperty(Value=true) => #158
                #157 -> BooleanProperty(Value=false) => #159
                StringProperty(Value=Case8) => #160
                #158, #159, #160 -> Zip => #161
                #68, #77, #87, #119, #128, #138, #154, #161 -> Merge => #162
                -> Take(Count=1) => #163
                SubscribeSubject Valence => #164
                #163, #164 -> WithLatestFrom
                -> WorkflowOutput
                #162 -> BehaviorSubject Result
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #170
                #30, #170 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #175
                #72, #175 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #180
                #123, #180 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #185
                #82, #185 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=InterCommand)
                -> PropertyMapping(Value) => #190
                #133, #190 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
            -> Concat => #10
            -> Last
            -> Condition SequenceCompleteCheck
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1.Item2) => #1
                #0 -> MemberSelector(Selector=Item2.Index) => #2
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=SequenceLengthIndex) => #4
                #2, #4 -> WithLatestFrom
                -> Subtract
                -> Equal(Operand=IntProperty(Value=0)) => #7
                #1, #7 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BehaviorSubject SequenceComplete => #13
            #10, #13 -> Merge
            -> BehaviorSubject PresentationResult => #15
            -> Condition IsIncomplete => #16
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1.Item2)
                -> BitwiseNot
                -> WorkflowOutput
            #15, #16 -> TakeUntil => #17
            SubscribeSubject SequenceInfo
            -> Sink EnableTrialStartIndicator => #19
                WorkflowInput Source1
                -> MemberSelector(Selector=EnableTrialStartIndicator)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            #17, #19 -> WithLatestFrom => #20
            SubscribeSubject TaskAccessState
            -> Condition InitiationClosed(Description="Task access is no longer Open (last minute of the window, or closed).") => #22
                WorkflowInput Source1
                -> NotEqual(Operand=StringProperty(Value=Open))
                -> WorkflowOutput
            SubscribeSubject SustainedSampleState
            -> Condition Initiated(Description="The animal has initiated this attempt (sustained poke in the odour port, including already being in the port when it starts).") => #24
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            #22, #24 -> TakeUntil
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
            -> MulticastSubject BehaviorCommands => #27
            #20, #27 -> TakeUntil => #28
            SubscribeSubject TaskAccessState
            -> Condition InitiationOpen(Description="Holds the next attempt, and its trial-start LED, until task access is Open again.") => #30
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=Open))
                -> WorkflowOutput
            #28, #30 -> SubscribeWhen
            -> Repeat

            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Index)
            -> Equal(Operand=IntProperty(Value=0))
            -> BitwiseNot => #36
            SubscribeSubject PresentationResult => #37
            -> MemberSelector(Selector=Item1.Item1) => #38
            #37 -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot => #40
            #38, #40 -> Zip
            -> BitwiseAnd => #42
            #36, #42 -> Zip
            -> BitwiseAnd => #44
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=CompletionRequiresEngagement)
            -> BitwiseNot => #47
            #44, #47 -> WithLatestFrom
            -> BitwiseAnd
            -> Condition CompletionConditionsMet => #50
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject PresentationResult => #51
            #50, #51 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #53
            SubscribeSubject SequenceInfo => #54
            #53, #54 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #56
              Expression:
                new (
                it.Item1.Item2 as RewardInfo,
                it.Item2 as Sequence,
                it.Item1.Item1.Item2 as TrialComplete
                )
            SubscribeSubject SequenceComplete
            -> MemberSelector(Selector=Item2) => #58
            SubscribeSubject SequenceInfo => #59
            #58, #59 -> WithLatestFrom => #60
            BooleanProperty(Value=true) => #61
            #60, #61 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            SubscribeSubject DetectedObject => #64
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Index) => #66
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=SequenceLengthIndex)
            -> PropertyMapping(Value) => #69
            #66, #69 -> Equal(Operand=IntProperty(Value=1))
            -> BitwiseNot => #71
            #64, #71 -> WithLatestFrom
            -> BitwiseAnd => #73
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item1.Item2) => #75
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Rewarded) => #77
            #75, #77 -> Zip
            -> BitwiseAnd => #79
            #73, #79 -> WithLatestFrom
            -> BitwiseAnd
            -> Condition MidsequenceCompletionConditionsMet => #82
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject PresentationResult => #83
            #82, #83 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Item2) => #85
            SubscribeSubject SequenceInfo => #86
            #85, #86 -> WithLatestFrom => #87
            BooleanProperty(Value=true) => #88
            #87, #88 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #90
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            #56, #63, #90 -> Merge => #91
            -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #93
            SubscribeSubject SustainedSampleOffset
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Seconds) => #96
            #93, #96 -> WithLatestFrom => #97
            StringProperty(Value=Case1)
            -> PropertyMapping(Value) => #99
            SubscribeSubject SequenceComplete
            -> MemberSelector(Selector=Item1.Item3) => #101
            #99, #101 -> Equal(Operand=StringProperty(Value=Case1)) => #102
            StringProperty(Value=Case4)
            -> PropertyMapping(Value) => #104
            #101, #104 -> Equal(Operand=StringProperty(Value=Case4)) => #105
            #102, #105 -> Merge
            -> Condition => #107
                WorkflowInput Source1
                -> WorkflowOutput
            #97, #107 -> TakeUntil
            -> Subtract => #109
            #91 -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #111
            #107 -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #113
            #111, #113 -> WithLatestFrom
            -> Subtract => #115
            #109, #115 -> Merge => #116
            #116, #91 -> WithLatestFrom => #117
            DoubleProperty(Value=0) => #118
            SubscribeSubject SequenceInfo
            -> Condition SkipSampling
                WorkflowInput Source1
                -> MemberSelector(Selector=SkipSampling)
                -> WorkflowOutput
            -> MemberSelector(Selector=RewardConditions)
            -> Index(Operand=IntProperty(Value=0)) => #122
            SubscribeSubject SequenceInfo => #123
            #122, #123 -> WithLatestFrom => #124
            BooleanProperty(Value=true) => #125
            #124, #125 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #127
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            #118, #127 -> WithLatestFrom => #128
            #117, #128 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject SustainedSampleState
            -> Condition => #133
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=EnableTrialStartIndicator)
            -> Condition => #136
                WorkflowInput Source1
                -> WorkflowOutput
            #133, #136 -> WithLatestFrom
            -> BooleanProperty(Value=true)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
            -> MulticastSubject BehaviorCommands

            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=EnableTrialEndIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
        -> SelectMany EndInitiation => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2) => #1
            -> StringProperty(Value=EndInitiation)
            -> MulticastSubject ExperimentEvents
            -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
            -> MulticastSubject BehaviorCommands => #7
            #7, #1 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition TrialValid
            WorkflowInput Source1
            -> MemberSelector(Selector=TrialComplete)
            -> WorkflowOutput
        -> SelectMany ActivateReward
            WorkflowInput Source1 => #0
            -> Condition RewardIndicatorsEnabled => #1
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=Rewarded))
                -> WorkflowOutput
            -> Condition R1
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
            -> MulticastSubject BehaviorCommands => #4
            #1 -> Condition R2
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
            -> MulticastSubject BehaviorCommands => #7
            #4, #7 -> Merge
            -> BooleanProperty(Value=true) => #9
            #9, #1 -> Zip => #10
            #0 -> Condition RewardIndicatorsDisabled => #11
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #12
            #12, #11 -> Zip => #13
            #0 -> Condition BothRewardPortsEnabled => #14
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=Both))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
            -> MulticastSubject BehaviorCommands => #16
            #14 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
            -> MulticastSubject BehaviorCommands => #18
            #16, #18 -> Merge
            -> BooleanProperty(Value=true) => #20
            #20, #14 -> Zip => #21
            #10, #13, #21 -> Merge
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
            #1 -> StringProperty(Value=ActivateReward)
            -> MulticastSubject ExperimentEvents
        -> SelectMany AwaitReward
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject RewardInfo
            -> StringProperty(Value=AwaitReward)
            -> MulticastSubject ExperimentEvents

            SubscribeSubject RewardPort0 => #5
            SubscribeSubject RewardInfo => #6
            #5, #6 -> WithLatestFrom => #7
            -> Condition R1 => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardTime) => #10
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardVolume)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Multiply(Operand=DoubleProperty(Value=8))
            -> PropertyMapping(RewardTime) => #15
            #8, #15 -> DataSchema.RewardCommand(RewardTime=0.119, RewardPosition=0)
            -> MulticastSubject RewardCommand
            -> BooleanProperty(Value=true) => #18
            #7 -> Condition R2
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Condition MaxAttempts
                WorkflowInput Source1 => #0
                SubscribeSubject Attempts => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #3
                SubscribeSubject RewardInfo
                -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
                #3, #5 -> Zip
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #21
            SubscribeSubject RewardPort1 => #22
            SubscribeSubject RewardInfo => #23
            #22, #23 -> WithLatestFrom => #24
            -> Condition R2 => #25
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardTime) => #27
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardVolume)
            -> PropertyMapping(Value) => #30
            #27, #30 -> Multiply(Operand=DoubleProperty(Value=8))
            -> PropertyMapping(RewardTime) => #32
            #25, #32 -> DataSchema.RewardCommand(RewardTime=0.119, RewardPosition=1)
            -> MulticastSubject RewardCommand
            -> BooleanProperty(Value=true) => #35
            #24 -> Condition R1
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Position)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition MaxAttempts
                WorkflowInput Source1 => #0
                SubscribeSubject Attempts => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #3
                SubscribeSubject RewardInfo
                -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
                #3, #5 -> Zip
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #38
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=RewardInfo)
            -> NullOrUnrewarded
            -> Condition NoReward
                WorkflowInput Source1
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #43
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.ResponseTime) => #45
            SubscribeSubject InitiationSequenceTime
            -> PropertyMapping(Value) => #47
            #45, #47 -> Subtract(Operand=DoubleProperty(Value=0.71459200000026613))
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT4.285S)
            -> BooleanProperty(Value=false) => #52
            SubscribeSubject SustainedSampleOnset => #53
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAvailablePokeReset) => #55
            #53, #55 -> Zip
            -> Condition RewardPokeTrial
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #58
            #18, #21, #35, #38, #43, #52, #58 -> Merge => #59
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence) => #61
            #59, #61 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject RewardPort0 => #65
            SubscribeSubject RewardPort1 => #66
            #65, #66 -> Merge
            -> IntProperty(Value=1)
            -> Accumulate => #69
            IntProperty(Value=0) => #70
            #69, #70 -> Merge
            -> BehaviorSubject Attempts
        -> Sink DecisionAccuracyPerformance => #11
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject TrialCorrectResult
            -> WorkflowOutput
        #7 -> Condition TrialInvalid
            WorkflowInput Source1
            -> MemberSelector(Selector=TrialComplete)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector="TrialComplete,Sequence")
        -> Take(Count=1) => #14
        #11, #14 -> Merge => #15
        #7 -> MemberSelector(Selector=TrialComplete) => #16
        #15, #16 -> WithLatestFrom
        -> Sink TrialCompletionPerformance
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject TrialCompletionResult
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Item2)
        -> SelectMany Reset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SequenceInfo

            SubscribeSubject SequenceInfo
            -> StringProperty(Value=Reset)
            -> MulticastSubject ExperimentEvents
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
            -> MulticastSubject BehaviorCommands
            -> StringProperty(Value=Zero)
            -> MulticastSubject OlfactometerCommand => #9
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=InterTrialInterval)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #13
            #9, #13 -> Delay(DueTime=PT3S)
            -> StringProperty(Value=Default)
            -> MulticastSubject OlfactometerCommand
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
        #6 -> MemberSelector(Selector=Item1)
        -> BehaviorSubject InitiationSequenceTime
    -> Concat => #5
    SubscribeSubject TaskAccessState
    -> Condition TaskAccessClosed => #7
      Description: Stops a trial that is still running when the taskAccess window closes (see the TaskAccess group). Normally there is none, as no new initiations are allowed in the last minute of a window.
      Workflow
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Closed))
        -> WorkflowOutput
    #5, #7 -> TakeUntil => #8
    SubscribeSubject TaskAccessState
    -> Condition TaskAccessOpen(Description="Holds the next trial until task access is Open: inside a window and more than a minute before it closes (see the TaskAccess group).") => #10
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Open))
        -> WorkflowOutput
    #8, #10 -> SubscribeWhen
    -> Repeat

    GroupWorkflow PerformanceAssessor
        SubscribeSubject TrialCompletionAverage => #0
        SubscribeSubject DecisionAccuracyAverage => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject TotalRewards => #3
        #2, #3 -> CombineLatest => #4
        SubscribeSubject CurrentSequences => #5
        #4, #5 -> WithLatestFrom
        -> Condition CriterionMet
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1.Item2) => #1
            #0 -> MemberSelector(Selector=Item2.DecisionAccuracyCriterion) => #2
            #1, #2 -> Zip
            -> GreaterThanOrEqual => #4
            #0 -> MemberSelector(Selector=Item1.Item2) => #5
            #0 -> MemberSelector(Selector=Item2.RewardedTrialsCriterion) => #6
            #5, #6 -> Zip
            -> GreaterThanOrEqual => #8
            #0 -> MemberSelector(Selector=Item1.Item1.Item1) => #9
            #0 -> MemberSelector(Selector=Item2.SequenceCompletionCriterion) => #10
            #9, #10 -> Zip
            -> GreaterThanOrEqual => #12
            #4, #8, #12 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.NextSequence)
        -> MulticastSubject LoadNewSequence

        BehaviorSubject<System.Boolean> TrialCompletionResult => #10
        SubscribeSubject CurrentSequences => #11
        #10, #11 -> WithLatestFrom
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> SelectMany StageTrialCompletionAverage(Description="Runs once per stage: averages only the TrialCompletionResult values produced since that stage started.") => #14
            WorkflowInput Source1
            -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(it)
            SubscribeSubject CurrentSequences
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Sequences[0][0].CompletedTrialsWindow
            -> PropertyMapping(Count) => #5
            #2, #5 -> Bonsai.Dsp.Buffer(Count=3, Skip=1)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> WorkflowOutput
        SubscribeSubject CurrentSequences
        -> Skip(Count=1)
        -> DoubleProperty(Value=NaN) => #17
        #14, #17 -> Merge
        -> BehaviorSubject TrialCompletionAverage

        BehaviorSubject<System.Boolean> TrialCorrectResult => #20
        SubscribeSubject CurrentSequences => #21
        #20, #21 -> WithLatestFrom
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> SelectMany StageDecisionAccuracyAverage(Description="Runs once per stage: averages only the TrialCorrectResult values produced since that stage started.") => #24
            WorkflowInput Source1
            -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(it)
            SubscribeSubject CurrentSequences => #3
            Source2=#3 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Sequences[0][0].DecisionAccuracyWindow
            -> PropertyMapping(Count) => #5
            #2, #5 -> Bonsai.Dsp.Buffer(Count=3, Skip=1)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> WorkflowOutput
        SubscribeSubject CurrentSequences
        -> Skip(Count=1)
        -> DoubleProperty(Value=NaN) => #27
        #24, #27 -> Merge
        -> BehaviorSubject DecisionAccuracyAverage

    GroupWorkflow RewardCounter
        SubscribeSubject RewardCommand => #0
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        IntProperty(Value=0) => #3
        #2, #3 -> Merge
        -> Accumulate => #5
        #0 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #7, #3 -> Merge
        -> Accumulate => #9
        #5, #9 -> CombineLatest => #10
        -> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")
        -> BehaviorSubject RewardCounter
        #10 -> BehaviorSubject RewardCounts

        SubscribeSubject RewardCommand => #14
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #16
        #14 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        #16, #18 -> Merge
        -> PublishSubject RewardIncrement

        SubscribeSubject RewardIncrement => #21
        IntProperty(Value=0) => #22
        #21, #22 -> Merge
        -> Accumulate => #24
        SubscribeSubject CurrentSequences
        -> Skip(Count=1) => #26
        #24, #26 -> TakeUntil
        -> Repeat
        -> BehaviorSubject TotalRewards

    GroupWorkflow SustainedPokes
        SubscribeSubject SampleOnset => #0
        -> BooleanProperty(Value=true) => #1
        #0 -> MemberSelector(Selector=Seconds) => #2
        #1, #2 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #4
        SubscribeSubject SampleOffset => #5
        -> BooleanProperty(Value=false) => #6
        #5 -> MemberSelector(Selector=Seconds) => #7
        #6, #7 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #9
        #4, #9 -> Merge
        -> RateLimiter(MessageDelay=PT0.005S) => #11
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.MinimumSampleTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #15
        #11, #15 -> Throttle(DueTime=PT0.05S)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> PublishSubject SustainedSampleOnset
        SubscribeSubject ProtocolSettings
        -> MemberSelector(Selector=SampleOffsetTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #22
        #11, #22 -> Throttle(DueTime=PT0.5S)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject SustainedSampleOffset

        SubscribeSubject SustainedSampleOnset => #26
        SubscribeSubject SustainedSampleOffset => #27
        BooleanProperty(Value=false)
        -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #29
        #26, #27, #29 -> Merge
        -> BehaviorSubject SustainedSampleState

    GroupWorkflow ProtocolRewardCounter
      Description: Rewards in the current protocol, in the same format as RewardCounter, which counts since the workflow started. Each time a new protocol is loaded (CurrentSequences) the running since-start counts are stored, and this node shows the difference from them. Nothing restarts at a protocol change, so a reward cannot be lost between two protocols.
      Workflow
        SubscribeSubject RewardCounts => #0
        -> Take(Count=1) => #1
        SubscribeSubject CurrentSequences
        -> Skip(Count=1) => #3
        #3, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        #1, #5 -> Merge => #6
        #0, #6 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 - Item2.Item1 as R1, Item1.Item2 - Item2.Item2 as R2)
        -> Format(Format="R1: {0}, R2: {1}", Selector="R1,R2")
        -> WorkflowOutput

    GroupWorkflow TaskAccess
      Description: Limits the task to the daily time windows in the taskAccess section of the session settings (no section or an empty list = always available). Every second the PC clock is compared with the windows and the result is published as TaskAccessState: Open (trials can start), Closing (last 60 s of a window: no new initiations, but a trial that was already initiated runs on) or Closed (any trial still running is stopped). On Closed, all nose-poke port LEDs are switched off and the olfactometer is set to Default. Changes are logged to ExperimentEvents as TaskAccessOpen / TaskAccessClosing / TaskAccessClosed. The 60 s cutoff is set in the State node.
      Workflow
        Timer(DueTime=PT0S, Period=PT1S) => #0
        SubscribeSubject BehaviorEvents => #1
        #0, #1 -> SubscribeWhen => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=TaskAccess) => #4
        #2, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform SecondsLeft
          Expression: Item2 == null || !Item2.Any() ? 86400.0 : Item2.Max((TimeSpan.Parse(End).TotalSeconds - TimeSpan.Parse(Start).TotalSeconds + 86400) % 86400 - (DateTime.Now.TimeOfDay.TotalSeconds - TimeSpan.Parse(Start).TotalSeconds + 86400) % 86400)
        -> Bonsai.Scripting.Expressions.ExpressionTransform State
          Expression: it > 60 ? "Open" : it > 0 ? "Closing" : "Closed"
        -> DistinctUntilChanged
        -> BehaviorSubject TaskAccessState => #9
        -> Bonsai.Scripting.Expressions.ExpressionTransform EventName
          Expression: "TaskAccess" + it
        -> MulticastSubject ExperimentEvents
        #9 -> Condition Closed(Description="Window closed: switch off all nose-poke port LEDs and set the olfactometer to Default.")
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Closed))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
        -> MulticastSubject BehaviorCommands
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand

    GroupWorkflow WaterLast24h
      Description: Water received in the last 24 h, shown to the nearest 0.1 ml. Each reward adds its own volume, taken from RewardCommand (RewardTime / Metadata.RewardTime, so the volume the valve was actually asked to deliver), and the same volume is removed again 24 h later. The sum is kept in nanolitres so that it stays exact. Manual flush pulses do not go through RewardCommand, so they are not counted. The total starts at 0.0 ml when the workflow starts, so rewards from before a restart are not included.
      Workflow
        SubscribeSubject RewardCommand => #0
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime) => #2
        #0, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToInt32(Math.Round(Item1.RewardTime / Item2 * 1000.0))
        -> Delay(DueTime=P1D)
        -> Negate => #6
        IntProperty(Value=0) => #7
        #4, #6, #7 -> Merge
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it / 1000000.0
        -> Format(Format="{0:0.0} ml")
        -> DistinctUntilChanged
        -> WorkflowOutput

ExternalizedMapping(SessionSettingsPath)
-> GroupWorkflow Initialisation
    BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S)
    -> BehaviorSubject StartDelay

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject RandomSource

    StringProperty(Value=Start)
    -> BehaviorSubject ExperimentEvents

    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSessionSettings(Path=Schemas\nprig-session-settings.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    SubscribeSubject CurrentSequences
    -> Take(Count=1)
    -> MemberSelector(Selector=Sequences)
    -> Merge
    -> UniformSampleList
    -> AsyncSubject ProtocolSettings

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.InitialSequence) => #18
    BehaviorSubject<System.String> LoadNewSequence => #19
    #18, #19 -> Merge
    -> BehaviorSubject CurrentSequencePath
    -> SelectMany LoadSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Path

        SubscribeSubject Path
        -> PropertyMapping(Path)
        -> SequenceSelector(Path=Schemas/doubles-option5-stage2.yml)
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject CurrentSequences

SubscribeSubject CameraStream
-> MemberSelector(Selector=Value.Image)

SubscribeSubject ExperimentEvents
SubscribeSubject OlfactometerCommand
SubscribeSubject RewardCounter

GroupWorkflow EndSessionCommands
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.EndSessionKey)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Ctrl+4)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Control", SuppressRepetitions=false)
    -> Delay(DueTime=PT1S)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO0
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #15
    SubscribeSubject RewardCommand => #16
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardPosition)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #18
    #16 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardPosition)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #20
    #18, #20 -> Merge
    -> Accumulate => #22
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MaximumRewardsAvailable)
    -> PropertyMapping(Value) => #25
    #22, #25 -> Equal(Operand=IntProperty(Value=200))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO0
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #36
    #15, #36 -> Merge
    -> Take(Count=1)
-> WorkflowOutput
