WorkflowBuilder(Version=2.8.5)
GroupWorkflow Camera
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #1
    ExternalizedMapping(SerialNumber(DisplayName=CameraSeriaNumber)) => #2
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Exposure)
    -> PropertyMapping(ExposureTime) => #5
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Gain)
    -> PropertyMapping(Gain) => #8
    #1, #2, #5, #8 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24282618, ColorProcessing=Default, ExposureTime=30000, Gain=15, Binning=1, TriggerSource=Line3)
    -> PublishSubject CameraStream
    -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\temp, ChunkSize=1)

    SubscribeSubject SessionSettings => #4
    SubscribeSubject BehaviorEvents => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject EventsO0
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject EventsO1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

    SubscribeSubject CameraStream => #22
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.FrameRate)
    -> PropertyMapping(FrameRate) => #25
    #22, #25 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=30)

    SubscribeSubject BehaviorNotifications
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

GroupWorkflow Behavior
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM15) => #2
    -> PublishSubject BehaviorEvents
    -> WorkflowOutput
    #2 -> Last
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PublishSubject BehaviorNotifications

    BooleanProperty(Value=false)
    -> BehaviorSubject CurrentSampleState

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> Condition SampleOnset
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
    -> PublishSubject SampleOnset => #15
    -> SelectMany SampleOffset
        WorkflowInput Source1

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
        -> Equal(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=None))
        -> BitwiseNot
        -> Take(Count=1)
        -> WorkflowOutput
    -> PublishSubject SampleOffset => #17
    #15, #17 -> Merge
    -> MulticastSubject CurrentSampleState

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort0

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort1

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1)) => #32
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2)) => #33
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2")) => #34
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0")) => #35
    #32, #33, #34, #35 -> Merge
    -> MulticastSubject BehaviorCommands

    BehaviorSubject<DataSchema.RewardCommand> RewardCommand
    -> SelectMany Reward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Command

        SubscribeSubject Command
        -> Condition RewardLocation1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1))
        -> MulticastSubject BehaviorCommands
        -> Delay(DueTime=PT0.01S) => #7
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort1) => #11
        #7, #11 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=100))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject BehaviorCommands => #15
        SubscribeSubject Command
        -> Condition RewardLocation2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2))
        -> MulticastSubject BehaviorCommands
        -> Delay(DueTime=PT0.01S) => #20
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort2) => #24
        #20, #24 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=100))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
        -> MulticastSubject BehaviorCommands => #28
        #15, #28 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

IncludeWorkflow
  Path=Extensions\Olfactometer.bonsai
  PortO0=COM13
  EventsO0=EventsO0
  PortO1=COM14
  EventsO1=EventsO1
  OlfactometerEvents=OlfactometerEvents
  SessionSettings=SessionSettings
  OlfactometerCommand=OlfactometerCommand

ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
-> LoadSessionSettings(Path=odor-discrimination_with-odours_rig2_stage2a.yml)
-> Take(Count=1)
-> AsyncSubject SessionSettings

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject RandomSource

ExternalizedMapping(Filter(DisplayName=StartCameraKey))
-> Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #11
SubscribeSubject SessionSettings
-> MemberSelector(Selector=CameraProperties.FrameRate)
-> PropertyMapping(Camera0Frequency) => #14
#11, #14 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=30))
-> MulticastSubject BehaviorCommands
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
-> MulticastSubject BehaviorCommands

GroupWorkflow SustainedPokes
    SubscribeSubject SampleOnset => #0
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MinimumSampleTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    #0, #4 -> Delay(DueTime=PT0.1S) => #5
    SubscribeSubject SampleOffset => #6
    #5, #6 -> TakeUntil
    -> Repeat
    -> PublishSubject SustainedSampleOnset
    -> SelectMany SustainedOffset
        WorkflowInput Source1

        SubscribeSubject SampleOffset => #1
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.SampleOffsetTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #5
        #1, #5 -> Delay(DueTime=PT0.1S) => #6
        SubscribeSubject SampleOnset => #7
        #6, #7 -> TakeUntil
        -> WorkflowOutput
    -> PublishSubject SustainedSampleOffset

Unit
-> Sink SetDefault
    WorkflowInput Source1
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand
    -> WorkflowOutput
-> SelectMany ChooseRandomSequence => #22
    WorkflowInput Source1
    -> StringProperty(Value=ChooseRandomSequence)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Sequences)
    -> UniformSampleList
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany SampleRewardCondition => #23
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardConditions)
    -> Take(Count=1)
    -> AsyncSubject RewardConditions
    -> StringProperty(Value=SampleRewardCondition)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject RandomSource => #6
    SubscribeSubject RewardConditions
    -> MemberSelector(Selector=Count)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #10
    #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
    -> Bonsai.Numerics.Distributions.Sample
    -> Take(Count=1)
    -> WorkflowOutput
#23, #22 -> Zip
-> SelectMany InitiationSequence
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceInfo
    -> StringProperty(Value=InitiationSequence)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject SequenceInfo => #5
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.RewardConditions)
    -> Index(Operand=IntProperty(Value=0)) => #8
    #5 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.RewardConditions)
    -> Index(Operand=IntProperty(Value=1)) => #11
    #8, #11 -> Merge
    -> Merge
    -> UniformSampleList => #14
    SubscribeSubject SustainedSampleOnset => #15
    #14, #15 -> SubscribeWhen
    -> CreateObservable PresentStimulus
        WorkflowInput Source1
        -> MulticastSubject CurrentValence
        -> MemberSelector(Selector=Command)
        -> MulticastSubject OlfactometerCommand => #3
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.PresentationTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT5S) => #8
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.InterCommand)
        -> PropertyMapping(Value) => #11
        #8, #11 -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand => #13
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.InterCommandTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #17
        #13, #17 -> Delay(DueTime=PT0.2S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat

    BehaviorSubject<DataSchema.Valence> CurrentValence
    -> Delay(DueTime=PT0.25S) => #20
    SubscribeSubject SustainedSampleOffset => #21
    #20, #21 -> TakeUntil
    -> LastOrDefault => #23
    SubscribeSubject SequenceInfo => #24
    #23, #24 -> WithLatestFrom
    -> Take(Count=1)
    -> WorkflowOutput

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
    -> MulticastSubject BehaviorCommands
-> SelectMany EndInitiation
    WorkflowInput Source1 => #0
    -> StringProperty(Value=EndInitiation)
    -> MulticastSubject ExperimentEvents
    -> StringProperty(Value=Purge)
    -> MulticastSubject OlfactometerCommand
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
    -> MulticastSubject BehaviorCommands => #6
    #6, #0 -> Zip
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> WorkflowOutput
-> SelectMany ActivateReward
    WorkflowInput Source1 => #0
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
    -> MulticastSubject BehaviorCommands => #3
    #0 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
    -> MulticastSubject BehaviorCommands => #6
    #3, #6 -> Merge
    -> Take(Count=1) => #8
    #8, #0 -> Zip
    -> MemberSelector(Selector=Item2)
    -> WorkflowOutput
    #0 -> StringProperty(Value=ActivateReward)
    -> MulticastSubject ExperimentEvents
-> SelectMany AwaitReward
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject RewardInfo
    -> StringProperty(Value=AwaitReward)
    -> MulticastSubject ExperimentEvents

    SubscribeSubject RewardPort0
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject Port0Attempts => #8
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=Item2) => #10
    #8, #10 -> WithLatestFrom => #11
    -> Condition R1 => #12
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RewardTime)
    -> PropertyMapping(RewardTime) => #15
    #12, #15 -> DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=0)
    -> MulticastSubject RewardCommand
    -> BooleanProperty(Value=true) => #18
    #11 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Condition MaxAttempts
        WorkflowInput Source1 => #0
        SubscribeSubject Attempts => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Item2.Item2.RewardAttempts) => #5
        #3, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #21
    Disable SubscribeSubject RewardPort1
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate
    -> Disable BehaviorSubject Port1Attempts => #25
    Disable SubscribeSubject RewardInfo
    -> Disable MemberSelector(Selector=Item2) => #27
    #25, #27 -> Disable WithLatestFrom => #28
    -> Disable Condition R2 => #29
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    Disable SubscribeSubject SessionSettings
    -> Disable MemberSelector(Selector=Metadata.RewardTime)
    -> Disable PropertyMapping(RewardTime) => #32
    #29, #32 -> Disable DataSchema.RewardCommand(RewardTime=0.1, RewardPosition=1)
    -> Disable MulticastSubject RewardCommand
    -> Disable BooleanProperty(Value=true) => #35
    #28 -> Disable Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Disable Condition MaxAttempts
        WorkflowInput Source1 => #0
        SubscribeSubject Attempts => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Item2.Item2.RewardAttempts) => #5
        #3, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Disable BooleanProperty(Value=false) => #38
    Disable SubscribeSubject RewardInfo
    -> Disable MemberSelector(Selector=Item1)
    -> Disable NullOrUnrewarded
    -> Disable Condition NoReward
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable BooleanProperty(Value=false) => #43
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=Item2.Item2)
    -> MemberSelector(Selector=ResponseTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=P1DT3H46M39S, Period=PT0S)
    -> BooleanProperty(Value=false) => #50
    #18, #21, #35, #38, #43, #50 -> Merge => #51
    SubscribeSubject RewardInfo
    -> MemberSelector(Selector=Item2.Item2) => #53
    #51, #53 -> Zip
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject RewardInfo

    SubscribeSubject RewardPort0 => #59
    Disable SubscribeSubject RewardPort1 => #60
    #59, #60 -> Disable Merge
    -> IntProperty(Value=1)
    -> Accumulate => #63
    IntProperty(Value=0) => #64
    #63, #64 -> Merge
    -> BehaviorSubject Attempts
-> SelectMany Reset
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceInfo

    SubscribeSubject SequenceInfo
    -> StringProperty(Value=Reset)
    -> MulticastSubject ExperimentEvents
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #9
    SubscribeSubject SequenceInfo
    -> MemberSelector(Selector=InterTrialInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #13
    #9, #13 -> Delay(DueTime=PT0S)
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat

SubscribeSubject OlfactometerCommand
SubscribeSubject ExperimentEvents

SubscribeSubject RewardCommand => #33
-> Condition R1
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> IntProperty(Value=1) => #35
IntProperty(Value=0) => #36
#35, #36 -> Merge
-> Accumulate => #38
#33 -> Condition R2
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> IntProperty(Value=1) => #40
#40, #36 -> Merge
-> Accumulate => #42
#38, #42 -> CombineLatest
-> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")

StringProperty(Value=Start)
-> BehaviorSubject ExperimentEvents

SubscribeSubject CameraStream
-> MemberSelector(Selector=Value.Image)
