<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>CommandsO0</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM10</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EventsO0</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>CommandsO1</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM13</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EventsO1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LoadSessionSettings">
          <p2:Path>hypnose-session.yml</p2:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>A</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>8</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="InputMapping">
          <PropertyMappings>
            <Property Name="EndValveState" Selector="it" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>A</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="p1:CreateEndValveStatePayload">
            <p1:EndValveState>EndValve0</p1:EndValveState>
          </harp:Payload>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>CommandsO0</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT1S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="p1:CreateValveClearPayload">
            <p1:ValveClear>Valve0</p1:ValveClear>
          </harp:Payload>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>CommandsO0</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>MessageBytes</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Rest</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CommandDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty">
          <Value>Rest</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OlfactometerCommands</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ConstructOlfactometerCommand</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ParseOlfactometerCommand" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ValvesO0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OdorValveStateO0" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ValvesO1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OdorValveStateO1" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EndValvesO0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="EndValveStateO0" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EndValvesO1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="EndValveStateO1" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>OlfactometerCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="OdorValveState" DisplayName="OdorValveStateO0" />
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOdorValveStatePayload">
                      <p1:OdorValveState>None</p1:OdorValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO0</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="OdorValveState" DisplayName="OdorValveStateO1" />
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOdorValveStatePayload">
                      <p1:OdorValveState>Valve1</p1:OdorValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="EndValveState" DisplayName="EndValveStateO0" />
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEndValveStatePayload">
                      <p1:EndValveState>EndValve1</p1:EndValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO0</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="EndValveState" DisplayName="EndValveStateO1" />
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEndValveStatePayload">
                      <p1:EndValveState>EndValve0</p1:EndValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="12" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="12" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source4" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BitMask</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source4" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Name</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>OlfactometerCommands.Count</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>4</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>CommandDictionary</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="38" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>